# 1 "/root/.topspin-BladeEpu/local_acqu/simulDirs/ppDirs/mlevhsqcetf3gp3d"
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;mlevhsqcetf3gp3d
;avance-version (12/01/11)
;TOCSY-HSQC
;3D sequence with
;   homonuclear Hartman-Hahn transfer using MLEV17 sequence
;      for mixing
;   H-1/X correlation via double inept transfer
;      using sensitivity improvement
;phase sensitive (t1)
;phase sensitive using Echo/Antiecho-TPPI gradient selection (t2)
;using two power levels for excitation and spinlock
;using trim pulses in inept transfer
;with decoupling during acquisition
;(use parameterset MLEVHSQCETF3GP3D)
;
;A. Bax & D.G. Davis, J. Magn. Reson. 65, 355-360 (1985)
;A.L. Davis, J. Keeler, E.D. Laue & D. Moskau, J. Magn. Reson. 98, 
;   207-216 (1992)
;A.G. Palmer III, J. Cavanagh, P.E. Wright & M. Rance, J. Magn.
;   Reson. 93, 151-170 (1991)
;L.E. Kay, P. Keifer & T. Saarinen, J. Am. Chem. Soc. 114,
;   10663-5 (1992)
;J. Schleucher et al., Angew. Chem. 114(10), 1518 (1993)
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


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

"p2=p1*2"
"p5=p6*.667"
"p7=p6*2"
"p22=p21*2"
"d11=30m"
"d12=20u"
"d13=4u"
"d26=1s/(cnst4*4)"
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"d0=3u"
"d10=3u"

"in0=inf1/2"
"in10=inf2/2"

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"SCALEF=p7*2/p5"
"FACTOR1=((d9-p17*2)/(p6*64+p5))/SCALEF"
"l1=FACTOR1*SCALEF"


"DELTA2=d26-p16-d13-4u"
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"DELTA=larger(p14,p22)+d12+d0*2"
"DELTA1=p16+d16+larger(p2,p14)+d10*2"


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aqseq 321


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; dimension 3D; AQ_mode  (F2) Echo-Antiecho (F1) States-TPPI
define delay MCWRK
define delay MCREST
define delay d0orig
"d0orig=d0"
define delay d10orig
"d10orig=d10"
define loopcounter t2loop
"t2loop=0"
define loopcounter t1loop
"t1loop=0"
define loopcounter ph1loop
"ph1loop=0"
define loopcounter ph2loop
"ph2loop=0"
define loopcounter ST1CNT
"ST1CNT = trunc(td1 / 2)"
define loopcounter ST2CNT
"ST2CNT = trunc(td2 / 2)"
"MCREST = d1 - d1"
"MCWRK = 0.029412*d1"
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1 ze
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LBLAV, MCWRK
      "d0=d0orig + t1loop * in0 "
      "phval7 = (ph1loop % 4) * 90"
      MCWRK ip7 + phval7
      "phval8 = (ph1loop % 4) * 90"
      MCWRK ip8 + phval8
      "d10=d10orig + t2loop * in10 "
      "phval3 = (t2loop * 180)%360"
      MCWRK ip3 + phval3
      "phval6 = (t2loop * 180)%360"
      MCWRK ip6 + phval6
      "phval31 = (t2loop * 180)%360"
      MCWRK ip31 + phval31
      MCWRK
      "phval0 = ph2loop * 1"
      MCWRK setgrad EA
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  d11 pl16:f3
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2 MCWRK  * 8 do:f3
LBLF2, MCWRK  * 8
LBLST2, MCWRK  * 9
LBLF1, MCWRK  * 8
LBLST1, MCWRK 
  MCREST
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3 d12 pl3:f3
  (p1 ph7)
  DELTA
  (p2 ph8)
  d0
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  (center (p14:sp3 ph1):f2 (p22 ph1):f3 )


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  d0
  d12 pl10:f1
  (p17 ph26)
						;begin MLEV17
6 (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p5 ph23)
  lo to 6 times l1 
						;end MLEV17
  (p17 ph26) 
  d26 pl1:f1
  (center (p2 ph1) (p22 ph6):f3 )
  d26 setrtp0|0 ctrlgrad 0
  p28 ph1
  d13
  (p1 ph2) (p21 ph3):f3
  d10 


  (center (p2 ph5) (p14:sp3 ph1):f2 )
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  d10
  p16:gp1*EA
  d16
  (p22 ph4):f3
  DELTA1
  (ralign (p1 ph1) (p21 ph4):f3 )
  d26
  (center (p2 ph1) (p22 ph1):f3 )
  d13
  p16:gp2
  DELTA2 pl16:f3
  4u setrtp0^0 ctrlgrad 4047
  go=2 ph31 cpd3:f3
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  MCWRK  do:f3 wr #0 if #0 zd 

  "ph2loop+=1"
      "d0=d0orig + t1loop * in0 "
      "phval7 = (ph1loop % 4) * 90"
      MCWRK ip7 + phval7
      "phval8 = (ph1loop % 4) * 90"
      MCWRK ip8 + phval8
      "d10=d10orig + t2loop * in10 "
      "phval3 = (t2loop * 180)%360"
      MCWRK ip3 + phval3
      "phval6 = (t2loop * 180)%360"
      MCWRK ip6 + phval6
      "phval31 = (t2loop * 180)%360"
      MCWRK ip31 + phval31
      MCWRK
      "phval0 = ph2loop * 1"
      MCWRK setgrad EA
  lo to LBLF2 times 2
  MCWRK 

  "t2loop+=1"
      "d0=d0orig + t1loop * in0 "
      "phval7 = (ph1loop % 4) * 90"
      MCWRK ip7 + phval7
      "phval8 = (ph1loop % 4) * 90"
      MCWRK ip8 + phval8
      "d10=d10orig + t2loop * in10 "
      "phval3 = (t2loop * 180)%360"
      MCWRK ip3 + phval3
      "phval6 = (t2loop * 180)%360"
      MCWRK ip6 + phval6
      "phval31 = (t2loop * 180)%360"
      MCWRK ip31 + phval31
      MCWRK
      "phval0 = ph2loop * 1"
      MCWRK setgrad EA
  lo to LBLST2 times ST2CNT
  MCWRK 
  "t2loop=0"
  "ph2loop=0"
  MCWRK 

  "ph1loop+=1"
      "d0=d0orig + t1loop * in0 "
      "phval7 = (ph1loop % 4) * 90"
      MCWRK ip7 + phval7
      "phval8 = (ph1loop % 4) * 90"
      MCWRK ip8 + phval8
      "d10=d10orig + t2loop * in10 "
      "phval3 = (t2loop * 180)%360"
      MCWRK ip3 + phval3
      "phval6 = (t2loop * 180)%360"
      MCWRK ip6 + phval6
      "phval31 = (t2loop * 180)%360"
      MCWRK ip31 + phval31
      MCWRK
      "phval0 = ph2loop * 1"
      MCWRK setgrad EA
  lo to LBLF1 times 2
  MCWRK 

  "t1loop+=1"
      "d0=d0orig + t1loop * in0 "
      "phval7 = (ph1loop % 4) * 90"
      MCWRK ip7 + phval7
      "phval8 = (ph1loop % 4) * 90"
      MCWRK ip8 + phval8
      "d10=d10orig + t2loop * in10 "
      "phval3 = (t2loop * 180)%360"
      MCWRK ip3 + phval3
      "phval6 = (t2loop * 180)%360"
      MCWRK ip6 + phval6
      "phval31 = (t2loop * 180)%360"
      MCWRK ip31 + phval31
      MCWRK
      "phval0 = ph2loop * 1"
      MCWRK setgrad EA
  lo to LBLST1 times ST1CNT
  MCWRK 
  "t1loop=0"
  "ph1loop=0"
  MCWRK rf #0
  lo to LBLAV times tdav
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exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph5=0 0 2 2
ph6=0
ph7=0 0 0 0 2 2 2 2
ph8=1 1 1 1 3 3 3 3
ph22=0
ph23=1
ph24=2
ph25=3
ph26=1
ph31=0 2 0 2 2 0 2 0 2 0 2 0 0 2 0 2
 

;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;pl16: f3 channel - power level for CPD/BB decoupling
;sp3: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p5 : f1 channel -  60 degree low power pulse
;p6 : f1 channel -  90 degree low power pulse
;p7 : f1 channel - 180 degree low power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p16: homospoil/gradient pulse
;p17: f1 channel - trim pulse                             [2.5 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p28: f1 channel - trim pulse
;d0 : incremented delay (F1 in 3D)                     [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d9 : TOCSY mixing time
;d10: incremented delay (F2 in 3D)                     [3 usec]
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d13: short delay                                    [4 usec]
;d16: delay for homospoil/gradient recovery
;d26: 1/(4J)YH
;cnst4: = J(YH)
;l1: loop for MLEV cycle: (((p6*64) + p5) * l1) + (p17*2) = mixing time
;inf1: 1/SW(H) = 2 * DW(H)
;inf2: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(H)) = DW(H)
;nd0: 2
;in10: 1/(2 * SW(X)) = DW(X)
;nd10: 2
;ns: 8 * n
;ds: >= 16
;td1: number of experiments in F1
;td2: number of experiments in F2
;FnMODE: States-TPPI (or TPPI) in F1
;FnMODE: echo-antiecho in F2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence
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;use gradient ratio:    gp 1 : gp 2
;                         80 : 20.1    for C-13
;                         80 :  8.1    for N-15

;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1% for C-13, 8.1% for N-15

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
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                                          ;preprocessor-flags-start
;1: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
                                          ;preprocessor-flags-end


;for older datasets use AQORDER : 3 - 2 - 1
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;$Id: mlevhsqcetf3gp3d,v 1.7 2012/01/31 17:49:27 ber Exp $
